PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = movingDots
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 0.1
      pos = (10, 0)
      units = cm
      startVal [time (s)] = 2.0
      image = gist/vrouw2.jpg
      size = (2, 2)
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 5.0
      pos [set every frame] = (-100+(frameN*2), 0)
      units = pix
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (20, 20)
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Flow
  Routine trial
